PsychoPy2experiment version="2020.2.3"
Settings
  Experiment info = {'participant': '1', 'condition': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2020.2.3
  Window size (pixels) = [2560, 1440]
  expName = consent_form
  logging level = debug
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Routines
  Routine consent_instr
    TextComponent title_consent_welcome
      letterHeight = 0.045
      pos = (0, .33)
      startVal [time (s)] = 0.0
      text = Welcome to the experiment!
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    TextComponent consent_info
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Before beginning the experiment, please read
        the consent form carefully and indicate whether
        or not you agree to participate in this study.
    TextComponent space_consent
      letterHeight = 0.035
      pos = (0, -.33)
      startVal [time (s)] = 0.0
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      text:
        Press the [SPACE] bar
        to read the consent form
    KeyboardComponent space_resp_consent
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent_1
    TextComponent title_consent
      letterHeight = 0.045
      pos = (0, .33)
      startVal [time (s)] = 0.0
      text = Consent Form (Part 1/3)
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    TextComponent consent_info_2
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        1. Purpose of the Study: The purpose of this research study is to explore how people acquire languages.

        2. Procedures to be followed: You will be asked to listen to a stream of sentences spoken in a foreign language using headphones while seated at a computer. To check whether you are wearing headphones, you will be asked to complete a task where you will listen to some tones and make judgements about their volume. While listening to the sentences, you will also be asked to listen to some tones and make judgements about the number of tones that you heard. After approximately 25 minutes, you will listen to some sentences presented one at a time and be asked to choose whether they came from the language that you listened to at the beginning of the experiment.
    TextComponent space_consent_2
      letterHeight = 0.035
      pos = (0, -.33)
      startVal [time (s)] = 0.0
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      text:
        Press the [SPACE] bar
        to continue reading the consent form
    KeyboardComponent space_resp_consent_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent_2
    TextComponent title_consent_2
      letterHeight = 0.045
      pos = (0, .33)
      startVal [time (s)] = 0.0
      text = Consent Form (Part 2/3)
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    TextComponent consent_info_3
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        3. Discomforts and Risks: There are no risks in participating in this research beyond those experienced in everyday life.

        4. Benefits: This study is designed to further our understanding of language acquisition. Gaining an understanding of basic mechanisms supporting language acquisition may ultimately have clinical implications in the future and will inform the basic science related to how language is acquired.

        5. Duration: It will take approximately 35 minutes to complete this study.

        6. Statement of Confidentiality: Your participation in this research is confidential. The data will be stored in a secure server hosted by Pavlovia (Open Science Tools Ltd.), and can only be accessed by the researchers conducting this study. The Pennsylvania State University’s Office for Research Protections and Institutional Review Board and the Office for Human Research Protections in the Department of Health and Human Services may review records related to this research study. In the event of a publication or presentation resulting from the research, no personally identifiable information will be shared.
    TextComponent space_consent_3
      letterHeight = 0.035
      pos = (0, -.33)
      startVal [time (s)] = 0.0
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      text:
        Press the [SPACE] bar
        to continue reading the consent form
    KeyboardComponent space_resp_consent_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine consent_3
    TextComponent title_consent_3
      letterHeight = 0.045
      pos = (0, .33)
      startVal [time (s)] = 0.0
      text = Consent Form (Part 3/3)
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    TextComponent consent_info_4
      letterHeight = 0.025
      startVal [time (s)] = 0.0
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      text:
        7. Right to Ask Questions: Please contact the Language and Cognition Lab via email at PSULanguageLearningExp@gmail.com with questions, complaints, or concerns about this research. You can also contact this email address if you feel that this study has harmed you. If you have any questions, concerns, problems about your rights as a research participant or would like to offer input, please contact The Pennsylvania State University’s Office for Research Protections (ORP) at (814) 865-1775. The ORP cannot answer questions about research procedures. Questions about research procedures can be answered by the research team.

        8. Payment for participation: In return for your participation, you will earn 9.51 USD per hour. The average time to complete this study is 35 minutes, so a payment of about 5.55 USD is typical.

        9. Voluntary Participation: Your decision to be in this research is voluntary. You can stop at any time by clicking the “esc” key on your keyboard or by exiting your browser. Refusal to take part in or withdrawing from this study will involve no penalty and you will forfeit any monetary earnings that you would otherwise receive via Prolific for your participation.
    TextComponent space_consent_4
      letterHeight = 0.035
      pos = (0, -.33)
      startVal [time (s)] = 0.0
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      text:
        Press the [SPACE] bar
        to continue
    KeyboardComponent space_resp_consent_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine repeat
    CodeComponent code
      Code Type = Both
      Each Frame:
        # Repeat consent form
        if mouse.isPressedIn(yes):
            continueRoutine = True

        # Move on to agreement
        if mouse.isPressedIn(no):
            consent_repeat.finished = True
      Each JS Frame:
        // Repeat consent form
        if (yes.contains(mouse) && mouse.getPressed()[0] === 1) {
            continueRoutine = true;
        }

        // Move on to agreement
        if (no.contains(mouse) && mouse.getPressed()[0] === 1) {
            consent_repeat.finished = true;
        }
    TextComponent would_you_like
      letterHeight = 0.04
      pos = (0, .21)
      startVal [time (s)] = 0.0
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      text:
        Would you like to go back and
        read the consent form again?
    TextComponent please_click
      letterHeight = 0.03
      pos = (0, .14)
      startVal [time (s)] = 0.0
      text = Please click one of the options below
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    TextComponent yes
      letterHeight = 0.045
      pos = (-0.25, 0)
      startVal [time (s)] = 0.0
      text = Yes
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    TextComponent no
      letterHeight = 0.045
      pos = (0.25, 0)
      startVal [time (s)] = 0.0
      text = No
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    MouseComponent mouse
      clickable = yes, no
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine agree_disagree
    TextComponent title_consent_4
      letterHeight = 0.045
      pos = (0, .33)
      startVal [time (s)] = 0.0
      stopVal [condition] = 1.0
      text = Agreement of Consent
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    TextComponent do_you_consent
      letterHeight = 0.04
      pos = (0, .16)
      startVal [time (s)] = 0.0
      text = Do you give your consent to participate in this study?
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    TextComponent please_click_2
      letterHeight = 0.033
      pos = (0, .11)
      startVal [time (s)] = 0.0
      text = Please click one of the options below
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    TextComponent if_you
      letterHeight = 0.03
      pos = (0, 0.025)
      startVal [time (s)] = 0.0
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      text:
        If you agree, you will continue on to the experiment
        If you disagree, the experiment will end automatically
    TextComponent i_agree
      letterHeight = 0.045
      pos = (-0.3, -0.08)
      startVal [time (s)] = 0.0
      text = I agree
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    TextComponent i_disagree
      letterHeight = 0.045
      pos = (0.3, -0.08)
      startVal [time (s)] = 0.0
      text = I disagree
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    MouseComponent mouse_2
      clickable = i_agree, i_disagree
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine goodbye
    CodeComponent code_disagree
      Code Type = Both
      Begin JS Routine:
        // End experiment if participant disagrees
        if (i_disagree.contains(mouse_2) && mouse_2.getPressed()[0] === 1) {
            return quitPsychoJS('We appreciate that you considered participating in our study.', false);
        }
      Each Frame:
        # Continue experiment if participant agrees
        if mouse_2.isPressedIn(i_agree):
            continueRoutine = False
      Each JS Frame:
        // Continue experiment if participant agrees
        if (i_agree.contains(mouse_2) && mouse_2.getPressed()[0] === 1) {
            continueRoutine = false;
        }
      End Routine:
        # End experiment if participant disagrees
        if mouse_2.isPressedIn(i_disagree):
            win.close()
            core.quit()
    TextComponent thank_you_disagree
      letterHeight = 0.043
      startVal [time (s)] = 0.0
      stopVal [time (s)] = 4
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      text:
        Thank you for taking the time
        to consider participating in this study.
  Routine instr
    TextComponent thank_you_agree
      letterHeight = 0.043
      startVal [time (s)] = 0.0
      text = Thank you for agreeing to participate in our study!
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    KeyboardComponent key_resp
      allowedKeys = 'space',
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine consent_instr
  LoopInitiator consent_repeat loopType="TrialHandler"
    loopType = random
    nReps = 10
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    Routine consent_1
    Routine consent_2
    Routine consent_3
    Routine repeat
  LoopTerminator consent_repeat
  Routine agree_disagree
  Routine goodbye
  Routine instr
