PsychoPy2experiment version="2020.2.3"
Settings
  Audio lib = sounddevice
  Experiment info = {'participant': '1', 'version': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2020.2.3
  Window size (pixels) = [2560, 1440]
  expName = headphone_check
  logging level = debug
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Routines
  Routine instr_HC_2
    TextComponent title_HC_2
      letterHeight = 0.045
      pos = (0, .33)
      startVal [time (s)] = 0.0
      text = Headphone Check
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    TextComponent instruction_HC_2
      letterHeight = 0.032
      pos = (0, 0.16)
      startVal [time (s)] = 0.0
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      text:
        In this task, you will hear three tones played in a row.
        One of these tones will sound quieter than the other two.

        After the tones finish playing, you will select which was the quietest by using a rating scale like the one below:
    TextComponent instruction_HC_3
      letterHeight = 0.033
      pos = (0, -0.17)
      startVal [time (s)] = 0.0
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      text:
        You will rate six sets of tones. To pass the headphone check,
        you must get at least FIVE out of SIX sets correct.
    SliderComponent demo_quiet_rating
      color = White
      forceEndRoutine = False
      granularity = 1
      labels = "","Tone 1","Tone 2","Tone 3",""
      size = (0.7, 0.032)
      startVal [time (s)] = 0.0
      styles = ['rating']
      ticks = (.8, 1, 2, 3, 3.2)
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    TextComponent space_2
      letterHeight = 0.035
      pos = (0, -.33)
      startVal [time (s)] = 0.0
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      text:
        Press the [SPACE] bar
        to continue reading the instructions
    KeyboardComponent space_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_HC_3
    TextComponent title_HC_3
      letterHeight = 0.045
      pos = (0, .33)
      startVal [time (s)] = 0.0
      text = Headphone Check
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    TextComponent instruction_HC_4
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        If you are wearing headphones, this task should be easy to complete! Without them, you will have a much harder time rating the tones acccurately.

        If you fail the task, you will have one more chance to retry it before proceeding to the experiment.
    TextComponent space_3
      letterHeight = 0.035
      pos = (0, -.33)
      startVal [time (s)] = 0.0
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      text:
        Press the [SPACE] bar
        to BEGIN the headphone check
    KeyboardComponent space_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine pause
    SoundComponent pause_silence
      sound = materials/silence.wav
      startVal [time (s)] = 0.0
      volume = 0
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  Routine play_HC
    PolygonComponent HC_fix_cross
      fillColor = $[1,1,1]
      lineWidth = .0005
      shape = cross
      size = (0.04, 0.04)
      startVal [time (s)] = 0.5
      stopVal [condition] = $HC_play_tones.status == FINISHED
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    SoundComponent HC_play_tones
      sound [set every repeat] = $tones
      startVal [time (s)] = 0.5
      volume = 1.25
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  Routine rate_HC
    CodeComponent code_rate_HC
      Code Type = Both
      Begin Experiment:
        # Correct response counter
        num_correct = 0
      Begin JS Experiment:
        // Correct response counter
        num_correct = 0;
      End JS Routine:
        // Add correct response
        if ((quiet_rating.rating === correct_resp)) {
            num_correct = (num_correct + 1);
        }
      End Routine:
        # Add correct response
        if quiet_rating.rating == correct_resp:
            num_correct = num_correct + 1
    TextComponent quietest_tone
      letterHeight = 0.04
      pos = (0, 0.15)
      startVal [time (s)] = 0.5
      stopVal [condition] = $quiet_silence.status == FINISHED
      text = Which tone was the quietest?
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    SliderComponent quiet_rating
      color = White
      forceEndRoutine = True
      granularity = 1
      labels = "","Tone 1","Tone 2","Tone 3",""
      pos = (0, .05)
      size = (0.7, 0.032)
      startVal [time (s)] = 0.5
      stopVal [condition] = $quiet_silence.status == FINISHED
      styles = ('rating',)
      ticks = (.8, 1, 2, 3, 3.2)
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    SoundComponent quiet_silence
      sound = materials/silence.wav
      startVal [condition] = quiet_rating.rating
      volume = 0
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  Routine pass_HC
    CodeComponent code_passed
      Code Type = Both
      Begin Routine:
        # Save variables
        thisExp.addData('num_correct', num_correct)

        # Continue routine if passed
        if num_correct >= 5:
            continueRoutine = True

        # Abort routine if failed
        if num_correct < 5:
            continueRoutine = False
      Each JS Frame:
        // Save variables
        psychoJS.experiment.addData('num_correct', num_correct)

        // Continue routine if passed
        if ((num_correct >= 5)) {
            continueRoutine = true;
        }

        // Abort routine if failed
        if ((num_correct < 5)) {
            continueRoutine = false;
        }
      End JS Routine:
        // Abort repeat loop if passed
        if ((num_correct >= 5)) {
            currentLoop.finished = true;
        }
      End Routine:
        # Abort repeat loop if passed
        if num_correct >= 5:
            HC_repeat.finished = True
    TextComponent title_passed
      letterHeight = 0.045
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = You passed the headphone check!
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    TextComponent you_passed
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = You can now proceed to the experiment.
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    TextComponent space_4
      letterHeight = 0.035
      pos = (0, -.33)
      startVal [time (s)] = 0.0
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      text:
        Press the [SPACE] bar
        to proceed to the experiment
    KeyboardComponent space_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fail_HC_r1
    CodeComponent code_failed
      Code Type = Both
      Begin Routine:
        # Continue routine if round 1 and failed
        if round == 1 and num_correct < 5:
            continueRoutine = True

        # Abort routine if round 2 or passed
        if round == 2 or num_correct >= 5:
            continueRoutine = False
      Each JS Frame:
        // Continue routine if round 1 and failed
        if (((round === 1) && (num_correct < 5))) {
            continueRoutine = true;
            }

        // Abort routine if round 2 or passed
        if (((round === 2) || (num_correct >= 5))) {
            continueRoutine = false;
            }
    TextComponent title_fail
      letterHeight = 0.045
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = You failed the headphone check
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    TextComponent you_failed
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      text = Please make sure that you are wearing headphones and try the task again.
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    TextComponent space_5
      letterHeight = 0.035
      pos = (0, -.33)
      startVal [time (s)] = 0.0
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      text:
        Press the [SPACE] bar
        to RETRY the headphone check
    KeyboardComponent space_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_HC
    TextComponent title_HC
      letterHeight = 0.045
      pos = (0, .33)
      startVal [time (s)] = 0.0
      text = Headphone Check
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    TextComponent instruction_HC
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Before we begin the study, you will complete a short task to confirm that you are wearing headphones.

        Headphones are required for the entirety of this experiment, so please connect your headphones and put them on now.
    TextComponent space
      letterHeight = 0.035
      pos = (0, -.33)
      startVal [time (s)] = 0.0
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      text:
        Press the [SPACE] bar
        once you are wearing headphones
    KeyboardComponent space_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine fail_HC_r2
    CodeComponent code_failed_2
      Code Type = Both
      Begin Routine:
        # Continue routine if round 2 and failed
        if round == 2 and num_correct < 5:
            num_correct = 0
            continueRoutine = True

        # Abort routine if round 1 or passed
        if round == 1 or num_correct >= 5:
            num_correct = 0
            continueRoutine = False
      Each JS Frame:
        // Continue routine if round 2 and failed
        if (((round === 2) && (num_correct >= 5))) {
            continueRoutine = false;
        }

        // Abort routine if round 1 or passed
        if (((round === 1) || (num_correct >= 5))) {
            num_correct = 0;
            continueRoutine = false;
        }
    TextComponent title_fail_2
      letterHeight = 0.045
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = You failed the headphone check
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    TextComponent you_failed_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Again, please make sure that you are wearing headphones before continuing.

        The headphone check is now finished and you can proceed to the experiment.
    TextComponent space_6
      letterHeight = 0.035
      pos = (0, -.33)
      startVal [time (s)] = 0.0
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      text:
        Press the [SPACE] bar
        to BEGIN the experiment
    KeyboardComponent space_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instr_HC
  Routine instr_HC_2
  Routine instr_HC_3
  LoopInitiator HC_repeat loopType="TrialHandler"
    conditionsFile = materials/HC_repeat_cond.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('round', 1)]),
      OrderedDict([('round', 2)])]
    Routine pause
    LoopInitiator HC_trials loopType="TrialHandler"
      conditionsFile = materials/HC_cond.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [OrderedDict([('tones', 'materials/antiphase_HC_IOS.wav'), ('correct_resp', 3)]),
        OrderedDict([('tones', 'materials/antiphase_HC_ISO.wav'), ('correct_resp', 2)]),
        OrderedDict([('tones', 'materials/antiphase_HC_OIS.wav'), ('correct_resp', 3)]),
        OrderedDict([('tones', 'materials/antiphase_HC_OSI.wav'), ('correct_resp', 2)]),
        OrderedDict([('tones', 'materials/antiphase_HC_SIO.wav'), ('correct_resp', 1)]),
        OrderedDict([('tones', 'materials/antiphase_HC_SOI.wav'), ('correct_resp', 1)])]
      Routine play_HC
      Routine rate_HC
    LoopTerminator HC_trials
    Routine pass_HC
    Routine fail_HC_r1
    Routine fail_HC_r2
  LoopTerminator HC_repeat
