PsychoPy2experiment version="2020.2.3"
Settings
  Experiment info = {'participant': '1', 'version': '1'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2020.2.3
  Window size (pixels) = [2560, 1440]
  expName = rate_images
  logging level = debug
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Routines
  Routine trial
    TextComponent title
      letterHeight = 0.045
      pos = (0, .33)
      startVal [time (s)] = 0.0
      text = Welcome to the experiment!
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    TextComponent intruction
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Before we begin the study, you will complete a short task to confirm that you are wearing headphones.

        Headphones are required for the entirety of this experiment, so please connect your headphones and put them on now.
  Routine instr
    TextComponent title_2
      letterHeight = 0.045
      pos = (0, .33)
      startVal [time (s)] = 0.0
      text = Welcome to the experiment!
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    TextComponent instruction
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        In this task, you will see some pictures and rate how positive you think they are.

        After your rating, you will describe the images by typing on your keyboard.
    TextComponent space
      letterHeight = 0.035
      pos = (0, -.33)
      startVal [time (s)] = 0.0
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      text:
        Press the [SPACE] bar
        to start the experiment
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_2
    TextComponent instruction_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
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      text:
        Now, you will view and rate the same pictures.

        After your rating, you will then describe the pictures by speaking into your microphone.
    TextComponent space_3
      letterHeight = 0.035
      pos = (0, -.33)
      startVal [time (s)] = 0.0
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      text:
        Press the [SPACE] bar
        to start the experiment
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine stim_rating
    FormComponent form
      Data Format = rows
      Item Padding = 0.05
      Items = .csv
      Pos = (0, 0)
      Randomize = False
      Size = (1, 0.7)
      Style = ['dark']
      Text Height = 0.03
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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    KeyboardComponent key_resp_4
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine thank_you
    TextComponent text_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you
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  Routine stim_pres_1
    ImageComponent image
      image [set every repeat] = $picture
      pos = (0, 0.15)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      stopVal [condition] = $text_2.status == FINISHED
      texture resolution = 512
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    SliderComponent slider
      color = White
      forceEndRoutine = False
      granularity = 0
      labels = "1","7"
      pos = (0, -0.3)
      size = (0.7, 0.032)
      startVal [time (s)] = 0.0
      stopVal [condition] = $text_2.status == FINISHED
      styles = ('rating',)
      ticks = (1, 7)
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    TextComponent text
      letterHeight = 0.035
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [condition] = $text_2.status == FINISHED
      text = Rate how positive the image is
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    TextComponent text_2
      letterHeight = 0.1
      opacity = 0
      startVal [condition] = slider.rating
      stopVal [duration (s)] = .7
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      text:
        Any text

        including line breaks
  Routine stim_pres_2
    ImageComponent image_2
      image [set every repeat] = $picture
      pos = (0, 0.15)
      size = (0.4, 0.4)
      startVal [time (s)] = 0.0
      texture resolution = 512
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    RatingScaleComponent rating_2
      forceEndRoutine = True
      high = 7
      labels = 1,7
      low = 1
      marker = circle
      pos = 0, -0.4
      scaleDescription = Please rate how positive the image is
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine type
    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase)
      Begin Routine:
        textFill = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill += ' '  # Adds a space instead of 'space'
                elif keys[0] == 'backspace':
                    textFill = textFill[:-1]  # Deletes
                elif keys[0] in allLetters:
                    textFill+=keys[0]  # Adds character to text if in alphabet.
                copyText.setText(textFill)  # Set new text on screen
      End Routine:
        # Save variables
        thisExp.addData('response', copyText.Text)
    TextComponent display_text
      letterHeight = 0.04
      pos = (0, 0.2)
      startVal [time (s)] = 0.0
      text = Please describe what you saw below by typing on your keyboard:
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    TextComponent copyText
      letterHeight = 0.035
      startVal [time (s)] = 0.0
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    TextComponent click_here
      letterHeight = 0.035
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
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      text:
        Click here to move
        to the next photo
    MouseComponent mouse
      clickable = click_here
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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  Routine speak
Flow
  Routine instr
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = materials/picture_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('picture', 'materials/IAPS/Pos_1710.jpg')]),
      OrderedDict([('picture', 'materials/IAPS/Pos_2340.jpg')]),
      OrderedDict([('picture', 'materials/IAPS/Pos_4610.jpg')]),
      OrderedDict([('picture', 'materials/IAPS/Pos_5260.jpg')]),
      OrderedDict([('picture', 'materials/IAPS/Pos_7260.jpg')]),
      OrderedDict([('picture', 'materials/IAPS/Pos_7502.jpg')]),
      OrderedDict([('picture', 'materials/IAPS/Pos_8501.jpg')]),
      OrderedDict([('picture', 'materials/IAPS/Pos_8531.jpg')])]
    Routine stim_pres_1
  LoopTerminator trials
  Routine thank_you
